PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = the_whole_experiment
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        logging.data("trial")
        #print("trial:", trial_number)
        #print(trial_go)
      End Routine:
        keyPressed = event.getKeys()
        correct = False
        print('keyPressed:', keyPressed)
        if 'space' in keyPressed:
            if trial_go:
                correct_feedback = True
                correct = True
                go_correct = go_correct + 1
                #correct_response = correct_response + 1
            else:
                incorrect_feedback = True
        else:
            if trial_go == False:
                correct = True
                nogo_correct = nogo_correct + 1
                #correct_response = correct_response + 1
            else:
                missed = missed + 1

        if correct:
            performance_record.append(1)
        else:
            performance_record.append(0)

        if correct_feedback:
            correct_opacity = 0.7
        if incorrect_feedback:
            incorrect_opacity = 0.7
            duration = 2
            noise_duration = 2

        logging.data("ITI duration: " + str(noise_duration))
        #print("noise_duration", noise_duration)
        event.clearEvents()
    SoundComponent sound_trial
      sound [set every repeat] = $sound_file1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      volume [set every repeat] = sound_on
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    GratingComponent grating_trial
      contrast = 0.8
      mask = gauss
      opacity [set every repeat] = vis_on
      ori [set every repeat] = orien
      sf = 5
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      tex = sin
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    KeyboardComponent key_resp_trial
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent fix_point_trial1
      disabled = True
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = (1-vis_on)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent fix_point_trial2
      disabled = True
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = 1-vis_on
      ori = 90
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine intro
    CodeComponent intro_code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from psychopy import logging
        import pandas as pd
        import random

        logging.console.setLevel(logging.DATA)

        #timestamps logging
        logging.data("utcTime: " + str(time.time()))


        #VARIABLES_1
        df_stimuli = pd.read_csv('stimuli1.csv')
        noise_dur_list = [0.5, 0.55, 0.60, 0.65, 0.70, 0.75, 0.8, 0.85, 0.9, 0.95, 1]
        intervals = pd.read_csv('intervals.csv')
        block_n = 0
        intervals_block = intervals.loc[block_n]
        #intervals_block = intervals.iloc[block_n,:]
        print(df_stimuli)
        logging.data(df_stimuli)
        df_trials = pd.DataFrame()

        stages = ["training", "ids1", "staircase1", "ams1", "eds1", "ids2", "staircase2", "ams2", "eds2"]
        stage_number = 0
        stage = stages[stage_number]
        pass_stage = False
        logging.data("stage " + str(stage))

        #relevant_mod_only = True #for training only
        relevant_mod_only = False

        trials_in_block = 4 #has to be divisible by 4
        mov_average = 2 #

        index = 0 #index for the stimuli file
        trial_number = 1 # trial order number
        duration = 0.7 #feedback duration
        correct_feedback = False
        incorrect_feedback = False

        go_correct = 0
        nogo_correct = 0
        performance_go = 0
        performance_nogo = 0

        #for progress bar
        size = 0.3
        x = 0
        a = 0.003 #change in time

        #for staircase
        correct_twice = False
        reversals = list()
        converging = True
        direction = "converging" # OR "diverging"

        performance_record = list()
        past_performance = 0
        missed = 0

        stat_text = "Useful info"

        #FUNCTIONS

        def get_stair_sign(relevant_modality, df = df_stimuli):
            logging.data("get_stair_sign")

            if relevant_modality == "AUD":
                go = df.aud1[index]
                nogo = df.aud2[index]
            else:
                go = df.vis1[index]
                nogo = df.vis2[index]
            print("go", go)
            print("nogo", nogo)
            if go > nogo:
                stair_sign = 1
            else:
                stair_sign = -1
            logging.data("get_stair_sign: stair_sign=" + str(stair_sign) + ", go=" + str(go))
            return stair_sign, go

        def get_soundfile_name(sound_number):
            logging.data("get_soundfile_name")

            # "sounds/sound_40.wav"
            soundfile_name = "sounds/sound_" + str(sound_number) + ".wav"

            return soundfile_name

        def trials_order(trials_in_block):
            print("trials_order")
            logging.data("trials_order")

            Go = list()
            Go.extend([True]*int(trials_in_block/2))
            Go.extend([False]*int(trials_in_block/2))
            irrelevant_mod = list()
            irrelevant_mod.extend([1]*int(trials_in_block/4))
            irrelevant_mod.extend([2]*int(trials_in_block/4))
            irrelevant_mod.extend([1]*int(trials_in_block/4))
            irrelevant_mod.extend([2]*int(trials_in_block/4))

            df = pd.DataFrame()
            df["Go"] = Go
            df["irrelevant_mod"] = irrelevant_mod

            df = df.sample(n = trials_in_block)
            df = df.reset_index(drop=True)

            return df

        df_trials = trials_order(trials_in_block)
        #print('df_trials')
        #print(df_trials)

        def stimuli_setting(relevant_modality, index, df = df_stimuli):
            print("stimuli_setting")
            logging.data("stimuli_setting")

            if relevant_modality == "AUD":
                go = get_soundfile_name(df.aud1[index])
                nogo = get_soundfile_name(df.aud2[index])
                irrel_mod1 = df.vis1[index]
                irrel_mod2 = df.vis2[index]
            else:
                irrel_mod1 = get_soundfile_name(df.aud1[index])
                irrel_mod2 = get_soundfile_name(df.aud2[index])
                go = df.vis1[index]
                nogo = df.vis2[index]

            logging.data("stimuli_setting: go=" +str(go) + ", nogo=" + str(nogo) + ", irrel_mod1=" + str(irrel_mod1) + ", irrel_mod2=" + str(irrel_mod2))
            return go, nogo, irrel_mod1, irrel_mod2

        def next_stimuli(relevant_modality, go, nogo, irrel_mod1, irrel_mod2, trial_number, df): #df = df_trials
            #logging.data("next_stimuli")
            n = trial_number - 1
            #print("n", n)
            if relevant_modality == "AUD":
                if df.irrelevant_mod[n] == 1:
                    orien = irrel_mod1
                else:
                    orien = irrel_mod2
                if df.Go[n]:
                    trial_go = True
                    sound_file1 = go
                else:
                    trial_go = False
                    sound_file1 = nogo
            else:
                if df.irrelevant_mod[n] == 1:
                    sound_file1 = irrel_mod1
                else:
                    sound_file1 = irrel_mod2
                if df.Go[n]:
                    trial_go = True
                    orien = go
                else:
                    trial_go = False
                    orien = nogo
            logging.data("next_stimuli: trial_number=" + str(trial_number) + ", trial_go=" + str(trial_go) + ", sound_file1=" + str(sound_file1) + ", orien=" + str(orien))

            return sound_file1, orien, trial_go


        #VARIABLES_2

        relevant_modality = df_stimuli.relevant_modality[index]
        logging.data("relevant_modality: " + relevant_modality)

        if relevant_modality == "AUD":
            sound_on = 1
            #vis_on = 0
            vis_on = 1
            logging.data("sound_on=" + str(sound_on) + ", vis_on=" + str(vis_on))

            #for staircase procedure:
            nogo_number = df_stimuli.aud2[index]
            angle = 1
        else:
            #sound_on = 0
            sound_on = 1
            vis_on = 1
            logging.data("sound_on=" + str(sound_on) + ", vis_on=" + str(vis_on))

            #for staircase procedure:
            nogo_number = df_stimuli.vis2[index]
            #angle = 2
            angle = 1

        correct_opacity = 0
        incorrect_opacity = 0
        #noise_duration = round(random.uniform(0.5,1), 2)
        noise_duration = noise_dur_list[intervals_block[trial_number-1]]

        #STIMULI

        go, nogo, irrel_mod1, irrel_mod2 = stimuli_setting(relevant_modality, index, df = df_stimuli)
        sound_file1, orien, trial_go = next_stimuli(relevant_modality, go, nogo, irrel_mod1, irrel_mod2, trial_number, df_trials)
      Begin Routine:
        win.mouseVisible = False
        logging.data("intro")
      End Routine:
        logging.data("utcTime: " + str(time.time()))
        event.clearEvents()
        print("done intro")
    TextComponent intro_text
      letterHeight = 0.1
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = START
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    TextComponent press_space_intro
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Press “space” when you are ready to begin.
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    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_point
    CodeComponent fix_point_code
      Code Type = Auto->JS
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      Begin Routine:
        logging.data("fix_point, trail_number=" + str(trial_number))

        print("fix point,", "trial_number:", trial_number,',', sound_file1,',visual degree:', orien, ",stage:", stage)
      End Routine:
        event.clearEvents()
    NoiseStimComponent noise
      contrast = 0.7
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = gauss
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.005
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.32, 0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fix_point1
      fillColor = white
      lineWidth = 2
      pos [set every frame] = (0, 0)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fix_point2
      fillColor = white
      lineWidth = 2
      ori = 90
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine response_feedback
    CodeComponent res_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        logging.data("response feedback")
        #print("response feedback")

        if stage == "staircase1" or stage == "staircase2":
            if correct:
                if correct_twice:
                    if converging:
                        pass
                    else:
                        reversals.append(nogo_number)
                        converging = True
                    nogo_number = nogo_number + stair_sign*angle
                    correct_twice = False
                else:
                    correct_twice = True
            else:
                if converging:
                    reversals.append(nogo_number)
                    converging = False
                nogo_number = nogo_number - stair_sign*angle
            logging.data("nogo_number: " + str(nogo_number))

            if relevant_modality == "AUD":
                nogo = get_soundfile_name(nogo_number)
            else:
                nogo = nogo_number
            logging.data("nogo_number: " + str(nogo_number))
            logging.data("reversals: " + str(len(reversals)))

            print("reversals:", len(reversals))

            if len(reversals) >= 12:
                logging.data("reversals max")
                resulting_nogo = int(sum(reversals[-6:])/6)
                logging.data("resultsing_nogo", resulting_nogo)
                if stage == "staircase1":
                    trials_staircase1.finished = True
                    staircase1.finished = True
                if stage == "staircase2":
                    trials_staircase2.finished = True
                    staircase2.finished = True
      End Routine:
        correct_opacity = 0
        incorrect_opacity = 0
        noise_duration = noise_dur_list[intervals_block[trial_number-1]]
        #noise_duration = round(random.uniform(0.5,1), 2)

        correct_feedback = False
        incorrect_feedback = False

        duration = 0.7

        trial_number = trial_number + 1
        if trial_number <= trials_in_block:
            sound_file1, orien, trial_go = next_stimuli(relevant_modality, go, nogo, irrel_mod1, irrel_mod2, trial_number, df_trials)

        #print(performance_record)
        if len(performance_record) >= mov_average:
            logging.data("mov average performance: " +str(sum(performance_record[-mov_average:])))
            if sum(performance_record[-mov_average:])>=(mov_average*0.8):
                pass_stage = True
            logging.data("pass_stage: " + str(pass_stage))
        performance = (sum(performance_record) - past_performance)/trials_in_block
        #performance_go = round(2*go_correct/trials_in_block, 2)
        #performance_nogo = round(2*nogo_correct/trials_in_block, 2)
        #stat_text = "Performance: " + str(performance)
        #stat_text = "Go: " + str(performance_go) + " NoGo: " + str(performance_nogo) + stage

        event.clearEvents()
    TextComponent text_6
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $nogo_number
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    NoiseStimComponent noise_3
      contrast = 0.7
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = gauss
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.005
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.32, 0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $noise_duration
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    PolygonComponent red
      contrast = 0.1
      disabled = True
      fillColor = red
      lineColor = red
      lineWidth = 0.1
      opacity [set every repeat] = incorrect_opacity
      shape = circle
      size = (0.27, 0.27)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    GratingComponent correct_green_2
      color = $[-1.0000, 0.0039, -1.0000]
      mask = gauss
      opacity [set every repeat] = correct_opacity
      sf = 0.05
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $noise_duration
      tex = sin
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    GratingComponent incorrect_red_2
      color = $[0.7, -1.0000, -1.0000]
      mask = gauss
      opacity [set every repeat] = incorrect_opacity
      sf = 0.1
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $noise_duration
      tex = sin
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  Routine end_of_experiment
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        logging.data("the end")
        print("Done")
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        That’s it :)
        Thank you!
  Routine fg
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine transition
    CodeComponent code_transition
      Code Type = Auto->JS
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      Begin Routine:
        logging.data("transition from " + str(stage))
        print("transition from " + str(stage))

        stage_number = stage_number + 1
        stage = stages[stage_number]

        logging.data("transition to " + str(stage))
        print("transition to " + str(stage))

        stimuli_change = False

        if stage == "ids1":
            index = 1
            stimuli_change = True

        elif stage == "staircase1":
            stair_sign, go_number = get_stair_sign(relevant_modality)
            if relevant_modality == "AUD":
                nogo_number = df_stimuli.aud2[index]
                angle = 1
            else:
                nogo_number = df_stimuli.vis2[index]
                angle = 1
            logging.data("nogo_number: " + str(nogo_number))
        elif stage == "ams1":
            reversals = list()
            index = 2
            stimuli_change = True
        elif stage == "eds1":
            index = 3
            stimuli_change = True
        elif stage == "ids2":
            index = 4
            stimuli_change = True
        elif stage == "staircase2":
            stair_sign, go_number = get_stair_sign(relevant_modality)
            if relevant_modality == "AUD":
                nogo_number = df_stimuli.aud2[index]
                angle = 1
            else:
                nogo_number = df_stimuli.vis2[index]
                angle = 1
            logging.data("nogo_number: " + str(nogo_number))
        elif stage == "ams2":
            index = 5
            stimuli_change = True
        elif stage == "eds2":
            index = 6
            stimuli_change = True


        #STIMULI
        if stimuli_change:
            relevant_modality = df_stimuli.relevant_modality[index]
            logging.data("relevant_modality: " + relevant_modality)

            go, nogo, irrel_mod1, irrel_mod2 = stimuli_setting(relevant_modality, index, df = df_stimuli)
            if stage == "ams1" or stage == "ams2":
                if relevant_modality == "AUD":
                    if nogo == get_soundfile_name(0):
                        nogo = get_soundfile_name(resulting_nogo)
                else:
                    if nogo == 0:
                        nogo = resulting_nogo

        sound_file1, orien, trial_go = next_stimuli(relevant_modality, go, nogo, irrel_mod1, irrel_mod2, trial_number, df_trials)

        logging.data("go=" + str(go) + ", nogo=" + str(nogo) + ", irrel_mod1=" + str(irrel_mod1) + ", irrel_mod2=" + str(irrel_mod2))
      End Routine:
        event.clearEvents()
    TextComponent text_3
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stage
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    TextComponent text_5
      disabled = True
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = TRANSITION TO
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  Routine brk_na
    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Experiment:
        logging.data("break")
        print("break")
    TextComponent press_space_break_2
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press “space” when you are ready for the next round
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    KeyboardComponent key_resp_break_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine brk
    CodeComponent code_break_tr
      Code Type = Auto->JS
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      Begin Routine:
        logging.data("break, stage: " + str(stage))
        logging.data("performance: " + str(performance))
        print("break")

        size = 0.3 - 2*a*block_n
        x = 0 + a*block_n

        block_n = block_n + 1

        if stage == "training":
            if pass_stage:
                block_n = 5
                training.finished=True
            else:
                if relevant_mod_only == False:
                    training.finished=True
                    print("TRAINING IS DONE")
                    logging.data("training is done")
                relevant_mod_only = False
                logging.data("relevant_mode_only = False")

            if relevant_mod_only:
                pass
            else:
                sound_on = 1
                vis_on = 1
        else:
            if pass_stage:
                print('move to next stage!')
                if stage == "ids1":
                    block_n = 10
                    ids1.finished=True
                elif stage == "eds1":
                    block_n = 25
                    eds1.finished = True
                elif stage == "ids2":
                    block_n = 30
                    ids2.finished=True
                elif stage == "eds2":
                    block_n = 45
                    eds2.finished = True
            else:
                print(performance)

        trial_number = 1

        df_trials = trials_order(trials_in_block)

        sound_file1, orien, trial_go = next_stimuli(relevant_modality, go, nogo, irrel_mod1, irrel_mod2, trial_number, df_trials)


        correct_response = 0
        missed = 0

        go_correct = 0
        nogo_correct = 0
        performance_go = 0
        performance_nogo = 0
        pass_stage = False
      End Routine:
        logging.data("utcTime: " + str(time.time()))
        event.clearEvents()
    TextComponent press_space_break
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press “space” when you are ready for the next round
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_break_stat
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
      text [set every repeat] = $stat_text
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    TextComponent text
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stage
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    TextComponent BREAK
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = BREAK
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    PolygonComponent polygon
      fillColor = white
      lineWidth = 4
      pos = (0, -0.25)
      shape = rectangle
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = grey
      lineWidth = 4
      pos [set every repeat] = (x, -0.25)
      shape = rectangle
      size [set every repeat] = (size, 0.05)
      startVal [time (s)] = 0.0
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  Routine for_test
    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        nogo_number = nogo_number - 30
Flow
  Routine intro
  LoopInitiator training loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator training_trials loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator training_trials
    Routine brk
  LoopTerminator training
  Routine transition
  LoopInitiator ids1 loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_ids1 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_ids1
    Routine brk
  LoopTerminator ids1
  Routine transition
  Routine for_test
  LoopInitiator staircase1 loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_staircase1 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_staircase1
    Routine brk
  LoopTerminator staircase1
  Routine transition
  LoopInitiator ams1 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    LoopInitiator trials_ams1 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_ams1
    Routine brk
  LoopTerminator ams1
  Routine transition
  LoopInitiator eds1 loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_eds1 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_eds1
    Routine brk
  LoopTerminator eds1
  Routine transition
  LoopInitiator ids2 loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_ids2 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_ids2
    Routine brk
  LoopTerminator ids2
  Routine transition
  Routine for_test
  LoopInitiator staircase2 loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_staircase2 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_staircase2
    Routine brk
  LoopTerminator staircase2
  Routine transition
  LoopInitiator ams2 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials_ams2 loopType="TrialHandler"
      loopType = random
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_ams2
    Routine brk
  LoopTerminator ams2
  Routine transition
  LoopInitiator eds2 loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    LoopInitiator trials_eds2 loopType="TrialHandler"
      loopType = sequential
      nReps = trials_in_block
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      Routine fixation_point
      Routine trial
      Routine response_feedback
    LoopTerminator trials_eds2
    Routine brk
  LoopTerminator eds2
  Routine end_of_experiment
